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Source:Signal%20Properties:DataIOFilter list ChannelNames= 0 // list of channel names
Storage:Data%20Location:DataIOFilter string DataDirectory= ..\data ..\data % % // path to top level data directory (directory)
Storage:Session:DataIOFilter string SubjectName= Test Name % % // subject alias
Storage:Session:DataIOFilter string SubjectSession= 123123 001 % % // three-digit session number
Storage:Session:DataIOFilter string SubjectRun= 01 00 % % // two-digit run number
Storage:Documentation:DataIOFilter string ID_System= NU-BCI // BCI2000 System Code
Storage:Documentation:DataIOFilter string ID_Amp= EGI%20NA300 // BCI2000 Amp Code
Storage:Documentation:DataIOFilter string ID_Montage= Geodesic%20Sensor%20Net%20128 // BCI2000 Cap Montage Code
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Source:Buffering:BufferedADC int SourceBufferSize= 2%20s 2s % % // size of data acquisition ring buffer (in blocks or seconds)
Source:BufferedADC int SourceCh= auto auto % % 
Source:BufferedADC int SampleBlockSize= auto 40 1 % 
Source:BufferedADC int SamplingRate= auto auto % % 
Source:BufferedADC list SourceChOffset= 1 auto 
Source:BufferedADC list SourceChGain= 1 auto 
Source:BufferedADC string ServerIP= 10.0.0.42 localhost % % // IP address of the machine running AmpServerPro
Source:BufferedADC int CommandPort= 9877 auto 1 65535 // port number corresponding to the command layer
Source:BufferedADC int NotificationPort= 9878 auto 1 65535 // port number corresponding to the notification layer
Source:BufferedADC int StreamPort= 9879 auto 1 65535 // port number corresponding to the stream layer
Source:BufferedADC string AmplifierID= auto auto 0 % // the ID of the Amplifier from which data should be collected
Source:BufferedADC int AmpState= 0 0 0 1 // set amp state to: 0 DefaultAcquisitionState, 1 DefaultSignalGeneration (enumeration)
Storage:BCI2000FileWriter string FileFormat= dat // format of data file (readonly)
Storage:Documentation:BCI2000FileWriter string StorageTime= % // time of beginning of data storage
Source:Alignment:AlignmentFilter int AlignChannels= 1 0 0 1 // align channels in time (0=no, 1=yes)
Source:Alignment:AlignmentFilter floatlist SourceChTimeOffset= 0 0 % % // time offsets for all source channels (may be empty)
Source:Online%20Processing:TransmissionFilter list TransmitChList= 1 1-129 // list of transmitted channels: Channel names may contain * and ? wildcards,  and character ranges enclosed in []; wildcard patterns may be negated by prepending an exclamation mark.  Ranges of channels may be specified using : or - to separate begin from end.
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Storage:Data%20Location:RunManager string DataFile= $%7bSubjectSession%7d%20$%7bSubjectName%7d/$%7bSubjectSession%7d_$%7bSubjectName%7d_$%7bSubjectRun%7d.$%7bFileFormat%7d // name of data file relative to DataDirectory
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System:Configuration matrix SignalSourceFilterChain= 8 { Filter%20Name Position%20String } DataIOFilter 0 AmpServerProADC 1 NullFileWriter 1 BCI2000FileWriter 1 EDFFileWriter 1 GDFFileWriter 1 AlignmentFilter 1.1 TransmissionFilter 1.2 // SignalSource filter chain (noedit)(readonly)
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Connector:ConnectorInput list ConnectorInputFilter= 2 T R // list of state names or signal elements to allow, "*" for any, signal elements as in "Signal(1,0)"
Connector:ConnectorInput string ConnectorInputAddress= 10.0.0.41:20237 localhost:20320 % % // IP address/port to read from, e.g. localhost:20320
Application:Human%20Interface%20Devices:KeystrokeFilter string KeystrokeStateName= % // State to be translated into keystrokes (0-F), empty for off
Application:Human%20Interface%20Devices:KeystrokeFilter string KeystrokeExpression= % // Expression that evaluates to a virtual keycode, empty for off
Application:Human%20Interface%20Devices:KeystrokeFilter string KeystrokeExpressionOnStartRun= % // Expression that initializes expression variables on StartRun
Connector:ConnectorOutput string ConnectorOutputAddress= 10.0.0.41:20238 localhost:20321 % % // one or more IP:Port combinations, e.g. localhost:20321
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System:Configuration matrix ApplicationFilterChain= 3 { Filter%20Name Position%20String } ConnectorInput 2.9999 KeystrokeFilter 3.1 ConnectorOutput 3.9999 // Application filter chain (noedit)(readonly)
Filtering:FieldTrip%20Buffer:FieldTripBufferFilter string FTBufferAddress= localhost:1972 // Buffer listening address
Filtering:FieldTrip%20Buffer:FieldTripBufferFilter matrix FTInitialOutput= 1 1 0 0 % % // Initial filter output (rows map to channels, columns map to elements)
Filtering:FieldTrip%20Buffer:FieldTripBufferFilter string FTOutputEventType= T%20R // Event type corresponding to output signal
Filtering:FieldTrip%20Buffer:FieldTripBufferFilter stringlist FTStatesToBuffer= 2 * -SourceTime // States to be written as events to buffer (* to indicate any state; leading - to exclude; FTStatesFromBuffer are always excluded)
Filtering:FieldTrip%20Buffer:FieldTripBufferFilter stringlist FTStatesFromBuffer= 2 M E // States to be read as events from buffer
Filtering:ExpressionFilter string StartRunExpression= % // expression executed on StartRun
Filtering:ExpressionFilter string StopRunExpression= % // expression executed on StopRun
Filtering:ExpressionFilter matrix Expressions= 0 1 // expressions used to compute the output of the ExpressionFilter (rows are channels; empty matrix for none)
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System:Configuration matrix SignalProcessingFilterChain= 2 { Filter%20Name Position%20String } FieldTripBufferFilter 2.B ExpressionFilter 2.C // SignalProcessing filter chain (noedit)(readonly)
System:Randomization int RandomSeed= 471 0 % % // seed for the BCI2000 pseudo random number generator (readonly)
System:Randomization int RandomizationWarning= 1 1 0 1 // warn if subsequent Runs have identical RandomSeed value (boolean)
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